<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gli="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Camera_347</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="spk:SpinnakerCapture">
                  <spk:Index xsi:nil="true" />
                  <spk:SerialNumber>24505347</spk:SerialNumber>
                  <spk:ColorProcessing>Default</spk:ColorProcessing>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Image</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:Grayscale" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:CropPolygon">
            <cv:MaskType>ToZero</cv:MaskType>
            <cv:FillValue>
              <cv:Val0>0</cv:Val0>
              <cv:Val1>0</cv:Val1>
              <cv:Val2>0</cv:Val2>
              <cv:Val3>0</cv:Val3>
            </cv:FillValue>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:RangeThreshold">
            <cv:Lower>
              <cv:Val0>0</cv:Val0>
              <cv:Val1>0</cv:Val1>
              <cv:Val2>0</cv:Val2>
              <cv:Val3>0</cv:Val3>
            </cv:Lower>
            <cv:Upper>
              <cv:Val0>255</cv:Val0>
              <cv:Val1>255</cv:Val1>
              <cv:Val2>255</cv:Val2>
              <cv:Val3>255</cv:Val3>
            </cv:Upper>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:MorphologicalOperator">
            <cv:Size>
              <cv:Width>3</cv:Width>
              <cv:Height>3</cv:Height>
            </cv:Size>
            <cv:Anchor>
              <cv:X>-1</cv:X>
              <cv:Y>-1</cv:Y>
            </cv:Anchor>
            <cv:Shape>Rectangle</cv:Shape>
            <cv:Iterations>1</cv:Iterations>
            <cv:Operation>Erode</cv:Operation>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:FindContours">
            <cv:Mode>External</cv:Mode>
            <cv:Method>ChainApproxNone</cv:Method>
            <cv:Offset>
              <cv:X>0</cv:X>
              <cv:Y>0</cv:Y>
            </cv:Offset>
            <cv:MinArea xsi:nil="true" />
            <cv:MaxArea xsi:nil="true" />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:BinaryRegionAnalysis" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:LargestBinaryRegion" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:Centroid" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Camera_348</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="spk:SpinnakerCapture">
                  <spk:Index xsi:nil="true" />
                  <spk:SerialNumber>24505348</spk:SerialNumber>
                  <spk:ColorProcessing>Default</spk:ColorProcessing>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Image</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:Grayscale" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:CropPolygon">
            <cv:MaskType>ToZero</cv:MaskType>
            <cv:FillValue>
              <cv:Val0>0</cv:Val0>
              <cv:Val1>0</cv:Val1>
              <cv:Val2>0</cv:Val2>
              <cv:Val3>0</cv:Val3>
            </cv:FillValue>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:RangeThreshold">
            <cv:Lower>
              <cv:Val0>0</cv:Val0>
              <cv:Val1>0</cv:Val1>
              <cv:Val2>0</cv:Val2>
              <cv:Val3>0</cv:Val3>
            </cv:Lower>
            <cv:Upper>
              <cv:Val0>255</cv:Val0>
              <cv:Val1>255</cv:Val1>
              <cv:Val2>255</cv:Val2>
              <cv:Val3>255</cv:Val3>
            </cv:Upper>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:MorphologicalOperator">
            <cv:Size>
              <cv:Width>3</cv:Width>
              <cv:Height>3</cv:Height>
            </cv:Size>
            <cv:Anchor>
              <cv:X>-1</cv:X>
              <cv:Y>-1</cv:Y>
            </cv:Anchor>
            <cv:Shape>Rectangle</cv:Shape>
            <cv:Iterations>1</cv:Iterations>
            <cv:Operation>Erode</cv:Operation>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:FindContours">
            <cv:Mode>External</cv:Mode>
            <cv:Method>ChainApproxNone</cv:Method>
            <cv:Offset>
              <cv:X>0</cv:X>
              <cv:Y>0</cv:Y>
            </cv:Offset>
            <cv:MinArea xsi:nil="true" />
            <cv:MaxArea xsi:nil="true" />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:BinaryRegionAnalysis" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:LargestBinaryRegion" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:Centroid" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Camera_742</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="spk:SpinnakerCapture">
                <spk:Index xsi:nil="true" />
                <spk:SerialNumber>24124742</spk:SerialNumber>
                <spk:ColorProcessing>Default</spk:ColorProcessing>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CropPolygon">
          <cv:Regions>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>977</cv:X>
                <cv:Y>83</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>409</cv:X>
                <cv:Y>83</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>409</cv:X>
                <cv:Y>1408</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>977</cv:X>
                <cv:Y>1408</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
          </cv:Regions>
          <cv:MaskType>ToZero</cv:MaskType>
          <cv:FillValue>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:FillValue>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:RangeThreshold">
          <cv:Lower>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>10</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:MorphologicalOperator">
          <cv:Size>
            <cv:Width>3</cv:Width>
            <cv:Height>3</cv:Height>
          </cv:Size>
          <cv:Anchor>
            <cv:X>-1</cv:X>
            <cv:Y>-1</cv:Y>
          </cv:Anchor>
          <cv:Shape>Rectangle</cv:Shape>
          <cv:Iterations>1</cv:Iterations>
          <cv:Operation>Close</cv:Operation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea xsi:nil="true" />
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Centroid" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Rescale">
          <dsp:Min>0</dsp:Min>
          <dsp:Max>1353</dsp:Max>
          <dsp:RangeMin>0</dsp:RangeMin>
          <dsp:RangeMax>117</dsp:RangeMax>
          <dsp:RescaleType>Linear</dsp:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>117 - value</scr:Expression>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Rescale">
          <dsp:Min>0</dsp:Min>
          <dsp:Max>595</dsp:Max>
          <dsp:RangeMin>0</dsp:RangeMin>
          <dsp:RangeMax>11</dsp:RangeMax>
          <dsp:RescaleType>Linear</dsp:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gli:KeyPress">
          <gli:KeyChar xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>@returns(str)
dfef process(value):
    button, coords = value
    x, y = coords
    return "expandEllipse,{:d},{:d}".format(int(x), int(y))
</ipy:Script>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="port:SerialWriteLine">
            <port:PortName>COM3</port:PortName>
            <port:NewLine>\n</port:NewLine>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="port:CreateSerialPort">
            <port:PortName>COM3</port:PortName>
            <port:BaudRate>9600</port:BaudRate>
            <port:NewLine>\r\n</port:NewLine>
            <port:Parity>None</port:Parity>
            <port:ParityReplace>63</port:ParityReplace>
            <port:DataBits>8</port:DataBits>
            <port:StopBits>One</port:StopBits>
            <port:Handshake>None</port:Handshake>
            <port:DiscardNull>false</port:DiscardNull>
            <port:DtrEnable>false</port:DtrEnable>
            <port:RtsEnable>false</port:RtsEnable>
            <port:ReadBufferSize>4096</port:ReadBufferSize>
            <port:WriteBufferSize>2048</port:WriteBufferSize>
            <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Camera_349</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="spk:SpinnakerCapture">
                  <spk:Index xsi:nil="true" />
                  <spk:SerialNumber>24505349</spk:SerialNumber>
                  <spk:ColorProcessing>Default</spk:ColorProcessing>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Image</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:Grayscale" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:CropPolygon">
            <cv:MaskType>ToZero</cv:MaskType>
            <cv:FillValue>
              <cv:Val0>0</cv:Val0>
              <cv:Val1>0</cv:Val1>
              <cv:Val2>0</cv:Val2>
              <cv:Val3>0</cv:Val3>
            </cv:FillValue>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:RangeThreshold">
            <cv:Lower>
              <cv:Val0>0</cv:Val0>
              <cv:Val1>0</cv:Val1>
              <cv:Val2>0</cv:Val2>
              <cv:Val3>0</cv:Val3>
            </cv:Lower>
            <cv:Upper>
              <cv:Val0>255</cv:Val0>
              <cv:Val1>255</cv:Val1>
              <cv:Val2>255</cv:Val2>
              <cv:Val3>255</cv:Val3>
            </cv:Upper>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:MorphologicalOperator">
            <cv:Size>
              <cv:Width>3</cv:Width>
              <cv:Height>3</cv:Height>
            </cv:Size>
            <cv:Anchor>
              <cv:X>-1</cv:X>
              <cv:Y>-1</cv:Y>
            </cv:Anchor>
            <cv:Shape>Rectangle</cv:Shape>
            <cv:Iterations>1</cv:Iterations>
            <cv:Operation>Erode</cv:Operation>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:FindContours">
            <cv:Mode>External</cv:Mode>
            <cv:Method>ChainApproxNone</cv:Method>
            <cv:Offset>
              <cv:X>0</cv:X>
              <cv:Y>0</cv:Y>
            </cv:Offset>
            <cv:MinArea xsi:nil="true" />
            <cv:MaxArea xsi:nil="true" />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:BinaryRegionAnalysis" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:LargestBinaryRegion" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:Centroid" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Camera_346</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Disable">
                <Builder xsi:type="Combinator">
                  <Combinator xsi:type="spk:SpinnakerCapture">
                    <spk:Index xsi:nil="true" />
                    <spk:SerialNumber>24505346</spk:SerialNumber>
                    <spk:ColorProcessing>Default</spk:ColorProcessing>
                  </Combinator>
                </Builder>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Image</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:Grayscale" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:CropPolygon">
            <cv:MaskType>ToZero</cv:MaskType>
            <cv:FillValue>
              <cv:Val0>0</cv:Val0>
              <cv:Val1>0</cv:Val1>
              <cv:Val2>0</cv:Val2>
              <cv:Val3>0</cv:Val3>
            </cv:FillValue>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:RangeThreshold">
            <cv:Lower>
              <cv:Val0>0</cv:Val0>
              <cv:Val1>0</cv:Val1>
              <cv:Val2>0</cv:Val2>
              <cv:Val3>0</cv:Val3>
            </cv:Lower>
            <cv:Upper>
              <cv:Val0>255</cv:Val0>
              <cv:Val1>255</cv:Val1>
              <cv:Val2>255</cv:Val2>
              <cv:Val3>255</cv:Val3>
            </cv:Upper>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:MorphologicalOperator">
            <cv:Size>
              <cv:Width>3</cv:Width>
              <cv:Height>3</cv:Height>
            </cv:Size>
            <cv:Anchor>
              <cv:X>-1</cv:X>
              <cv:Y>-1</cv:Y>
            </cv:Anchor>
            <cv:Shape>Rectangle</cv:Shape>
            <cv:Iterations>1</cv:Iterations>
            <cv:Operation>Erode</cv:Operation>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:FindContours">
            <cv:Mode>External</cv:Mode>
            <cv:Method>ChainApproxNone</cv:Method>
            <cv:Offset>
              <cv:X>0</cv:X>
              <cv:Y>0</cv:Y>
            </cv:Offset>
            <cv:MinArea xsi:nil="true" />
            <cv:MaxArea xsi:nil="true" />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:BinaryRegionAnalysis" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:LargestBinaryRegion" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:Centroid" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="31" To="35" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="37" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source2" />
      <Edge From="37" To="39" Label="Source1" />
      <Edge From="38" To="39" Label="Source2" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="56" To="57" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="59" Label="Source1" />
      <Edge From="59" To="60" Label="Source1" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="61" To="62" Label="Source1" />
      <Edge From="62" To="63" Label="Source1" />
      <Edge From="63" To="64" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
